PsychoPy2experiment version="2025.1.0"
Settings
  expName = P3_KL_B
  expVersion = KL-B-P3-LBK-1-blok
  Experiment info = {'participant':'TEST-01','session':'S001'}
  Data filename = u'data' + os.sep + 'P3_glowne_%s_%s_%s' % (expInfo['participant'], expInfo['session'], data.getDateStr(format='%Y-%m-%d_%H%M'))
  Full-screen window = False
  Window size (pixels) = [1920,1080]
  Units = pix
  Screen = 1
  Monitor = testMonitor
  Show mouse = True
  color = black
  Save excel file = True
  Save hdf5 file = True
  eyetracker = MouseGaze
  mgBlink = MIDDLE_BUTTON
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  logging level = warning
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine intro
    RoutineSettingsComponent intro
      color = black
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    CodeComponent lsl_intro
      Code Type = Py
      Begin Experiment:
        from lsl_runtime import LBKMonitor
        lbk = LBKMonitor(window_seconds=5.0)
      Each Frame:
        lbk.poll()
      End Routine:
        # exp:start dopiero po spacji - eksperymentator zdazy wlaczyc LabRecorder na ekranie instrukcji
        lbk.marker('exp:start|study=P3|list=L1_LBK_4obrazy_test|session=' + str(expInfo['session']))
    TextComponent instrukcja
      height = 38
      letterHeight = 38
      wrapWidth = 1500
      startVal [time (s)] = 0.0
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      text:
        Za chwilę zobaczysz kilka obrazów.
        Oglądaj je swobodnie.

        Po obejrzeniu wszystkich obrazów ocenisz,
        jak silne pobudzenie odczuwałaś/odczuwałeś (skala 1–9).

        Naciśnij SPACJĘ, aby rozpocząć.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine fixation
    RoutineSettingsComponent fixation
      color = black
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    CodeComponent lsl_fix
      Code Type = Py
      Begin Routine:
        lbk.marker('trial:start|trial=' + str(trial_id))
      Each Frame:
        lbk.poll()
    TextComponent krzyzyk
      text = +
      height = 80
      letterHeight = 80
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine stimulus
    RoutineSettingsComponent stimulus
      color = black
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    CodeComponent lsl_stim
      Code Type = Py
      Begin Routine:
        win.callOnFlip(lbk.marker, 'stim:onset|stim=' + str(stimulus_id))
      Each Frame:
        lbk.poll()
      End Routine:
        lbk.marker('stim:offset|stim=' + str(stimulus_id))
    ImageComponent obraz
      image [set every repeat] = $image_file
      size [set every repeat] = $[stim_width, stim_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      stopWithRoutine = True
      syncScreenRefresh = True
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  Routine gray
    RoutineSettingsComponent gray
      color = 0
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    CodeComponent lsl_gray
      Code Type = Py
      Each Frame:
        lbk.poll()
    TextComponent szary_ekran
      height = 20
      letterHeight = 20
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rating
    RoutineSettingsComponent rating
      color = black
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    CodeComponent lsl_rating
      Code Type = Py
      Each Frame:
        lbk.poll()
      End Routine:
        if rating_resp.keys:
            rt_value = rating_resp.rt if rating_resp.rt is not None else -1.0
            lbk.marker('resp|q=SAM_AROUSAL_ROBOCZE|key=' + str(rating_resp.keys) + '|rt=' + str(round(float(rt_value), 3)))
    TextComponent pytanie
      height = 37
      letterHeight = 37
      wrapWidth = 1500
      startVal [time (s)] = 0.0
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      text:
        Jak silne pobudzenie odczuwałaś/odczuwałeś
        podczas oglądania obrazów?

        1 = bardzo słabe … 9 = bardzo silne

        Naciśnij klawisz od 1 do 9.
    KeyboardComponent rating_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine end
    RoutineSettingsComponent end
      color = black
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    CodeComponent lsl_end
      Code Type = Py
      Begin Routine:
        lbk.marker('exp:end')
      Each Frame:
        lbk.poll()
      End Experiment:
        lbk.summary()
    TextComponent koniec
      text = Dziękujemy! To już koniec.
      height = 42
      letterHeight = 42
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    nReps = 1
    conditionsFile = conditions/L1_LBK_4obrazy_test.csv
    conditions = []
    loopType = sequential
    endPoints = [1,5]
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    Routine fixation
    Routine stimulus
    Routine gray
  LoopTerminator trials
  Routine rating
  Routine end
